CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^r(?P<WellRow>\\\\d{2})c(?P<WellColumn>\\\\d{2})f(?P<Site>\\\\d{2})p(?P<Plane>\\\\d{2})-ch(?P<ChannelNumber>\\\\d)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:pH3
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:RescaledDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:EdU
    Name the output image:RescaledEdU
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:pH3
    Name the output image:RescaledpH3
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Nuclei_objects']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
    Select the input image:RescaledDAPI
    Name the primary objects to be identified:Nuclei_objects
    Typical diameter of objects, in pixel units (Min,Max):15,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:9|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notes:['EdU_objects']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
    Select the input image:RescaledEdU
    Name the primary objects to be identified:EdU_objects
    Typical diameter of objects, in pixel units (Min,Max):15,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:RescaledpH3
    Name the primary objects to be identified:pH3_objects
    Typical diameter of objects, in pixel units (Min,Max):15,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:RescaledDAPI
    Select objects to measure:Nuclei_objects

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents/cellprofiler/Cell_Cycle/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cc_status_
    Overwrite existing files without warning?:No
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