CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:[-+]?([0-9]*\\\\.[0-9]+|[0-9]+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:or (metadata does ChannelName "Ch1-T1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "Ch1-T2")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "Ch1-T3")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:RescaledBlue
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:Green
    Name the output image:RescaledGreen
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:Red
    Name the output image:RescaledRed
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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notes:['ID Nuclei']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
    Select the input image:RescaledBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:Nuclei_outline
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:9|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notes:['ID Green objects']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
    Select the input image:RescaledGreen
    Name the primary objects to be identified:GreenObjects
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:Green_outline
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:10|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notes:['ID red objects']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
    Select the input image:RescaledRed
    Name the primary objects to be identified:RedObjects
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:Red_outline
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureCorrelation:[module_num:11|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notes:['Measure correlation of green and red channel inside the DAPI positive area']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enabled:False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
    Hidden:2
    Hidden:1
    Select an image to measure:RescaledGreen
    Select an image to measure:RescaledRed
    Set threshold as percentage of maximum intensity for the images:5
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei

RelateObjects:[module_num:12|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notes:['Relationship Red Objects and Green Objects']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
    Select the input child objects:RedObjects
    Select the input parent objects:GreenObjects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:13|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notes:['Green versus DAPI']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
    Select the input child objects:GreenObjects
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:14|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notes:['Red versus DAPI']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
    Select the input child objects:RedObjects
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
ClassifyObjects:[module_num:15|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:3
    Select the object to be classified:GreenObjects
    Select the measurement to classify by:Children_RedObjects_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.5
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:Yes
    Name the output image:ClassifiedRedGreen
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Children_GreenObjects_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.5
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object to be classified:Nuclei
    Select the measurement to classify by:Children_RedObjects_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.5
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
MaskObjects:[module_num:16|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notes:['']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
    Select objects to be masked:GreenObjects
    Name the masked objects:RedGreen
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:17|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notes:['Nuclei_red']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
    Select objects to be masked:Nuclei
    Name the masked objects:RedDAPI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:18|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
    Select objects to be masked:Nuclei
    Name the masked objects:GreenDAPI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GreenObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:19|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RedGreen
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:GreenDAPI
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RedDAPI
    Retain a binary image of the object regions?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/cellprofiler/Coloc_results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Image|Count_RedGreen,Image|Count_RedDAPI,Image|Count_GreenObjects,Image|Count_GreenDAPI,Image|Count_Nuclei,Image|Count_RedObjects,Image|AreaOccupied_Perimeter_RedGreen,Image|AreaOccupied_Perimeter_GreenDAPI,Image|AreaOccupied_Perimeter_RedDAPI,Image|AreaOccupied_AreaOccupied_RedGreen,Image|AreaOccupied_AreaOccupied_GreenDAPI,Image|AreaOccupied_AreaOccupied_RedDAPI,Image|AreaOccupied_TotalArea_RedGreen,Image|AreaOccupied_TotalArea_GreenDAPI,Image|AreaOccupied_TotalArea_RedDAPI,Image|FileName_DAPI,Image|Classify_Children_GreenObjects_Count_Bin_1_NumObjectsPerBin,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Nuclear_quantification_
    Overwrite existing files without warning?:No
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