CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "Simple")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^r(?P<WellRow>\\\\d{2})c(?P<WellColumn>\\\\d{2})f(?P<Site>\\\\d{2})p(?P<Plane>\\\\d{2})-ch(?P<ChannelNumber>\\\\d)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<N>N\\\\d)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Treatment>\\\\w+\\\\s*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI8
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:EdU
    Name the output image:EdU8
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:Ki67
    Name the output image:Ki67_8
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Nuclei_objects']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
    Select the input image:DAPI8
    Name the primary objects to be identified:Nuclei_objects
    Typical diameter of objects, in pixel units (Min,Max):8,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:9|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notes:['EdU_objects']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
    Select the input image:EdU8
    Name the primary objects to be identified:EdU_objects
    Typical diameter of objects, in pixel units (Min,Max):8,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Per object
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0,1.0
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    Masking objects:Nuclei_objects
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Ki67_8
    Name the primary objects to be identified:Ki67_objects
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Per object
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0,1.0
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    Masking objects:Nuclei_objects
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
RelateObjects:[module_num:11|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
    Select the input child objects:EdU_objects
    Select the input parent objects:Nuclei_objects
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:12|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
    Select the input child objects:Ki67_objects
    Select the input parent objects:Nuclei_objects
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:13|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notes:['Double_positive_edu_Ki67']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
    Select the input child objects:EdU_objects
    Select the input parent objects:Ki67_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ClassifyObjects:[module_num:14|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:3
    Select the object to be classified:EdU_objects
    Select the measurement to classify by:Parent_Nuclei_objects
    Select bin spacing:Evenly spaced bins
    Number of bins:2
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object to be classified:Ki67_objects
    Select the measurement to classify by:Parent_Nuclei_objects
    Select bin spacing:Evenly spaced bins
    Number of bins:2
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object to be classified:EdU_objects
    Select the measurement to classify by:Parent_Ki67_objects
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:Nuclei_objects
    Select the first measurement:Children_EdU_objects_Count
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
MaskObjects:[module_num:15|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
    Select objects to be masked:EdU_objects
    Name the masked objects:EDU_DAPI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:Ki67_objects
    Name the masked objects:Ki67_DAPI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_objects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:Ki67_objects
    Name the masked objects:Ki67_Edu_masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EDU_DAPI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\KI Documents\\\\\\\\PostDoc KI\\\\\\\\Results\\\\\\\\Analysis Microscopy\\\\\\\\Analysis_NES_Cell_Cycle\\\\\\\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Image|Count_Ki67_DAPI,Image|Count_Ki67_objects,Image|Count_Ki67_Edu_masked,Image|Count_EdU_objects,Image|Count_Nuclei_objects,Image|Count_EDU_DAPI,Image|FileName_DAPI,Image|FileName_EdU,Image|Metadata_FileLocation,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_ChannelNumber,Image|Metadata_WellRow,Image|Metadata_WellColumn
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cc_exit_segmentated_final_
    Overwrite existing files without warning?:No
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