CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "ch3")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^r(?P<WellRow>\\\\d{2})c(?P<WellColumn>\\\\d{2})f(?P<Site>\\\\d{2})p(?P<Plane>\\\\d{2})-ch(?P<ChannelNumber>\\\\d)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<N>N\\\\d)
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Treatment>\\\\w+\\\\s*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "Simple")
    Name to assign these images:Segmentation
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3") (file doesnot contain "Simple")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI8
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:Segmentation
    Name the output image:Segmentation_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Nuclei_objects']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
    Select the input image:Segmentation_scaled
    Name the primary objects to be identified:Nuclei_objects
    Typical diameter of objects, in pixel units (Min,Max):8,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:DAPI8
    Select objects to measure:Nuclei_objects

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Nuclei_objects
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\KI Documents\\\\\\\\PostDoc KI\\\\\\\\Results\\\\\\\\Analysis Microscopy\\\\\\\\Analysis_NES_Cell_Cycle\\\\\\\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Nuclei_objects|Intensity_IntegratedIntensity_DAPI8,Nuclei_objects|Number_Object_Number,Nuclei_objects|AreaShape_Perimeter,Nuclei_objects|AreaShape_MaxFeretDiameter,Nuclei_objects|AreaShape_MinFeretDiameter,Nuclei_objects|AreaShape_Solidity,Nuclei_objects|AreaShape_MedianRadius,Nuclei_objects|AreaShape_Compactness,Nuclei_objects|AreaShape_Eccentricity,Nuclei_objects|AreaShape_Area,Nuclei_objects|AreaShape_MeanRadius
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cc_status_segmentated_DAPI_NUCLEI
    Overwrite existing files without warning?:No
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